PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ArchivoPrueba
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine On
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    TextComponent CondicionOn
      color [set every repeat] = $Colors
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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      text [set every repeat]:
        $PreguntaOn
  Routine Off
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    TextComponent CondicionOff
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $PreguntaOff
  Routine introducción_3
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    TextComponent introducción
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Intente recordar el recorrido que realiza por las zonas que se le indiquen. Cuando comience el conteo, intente seguir la secuencia del mismo.
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine FInalizacion
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    TextComponent FinPrueba
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        Te informamos que la adquisición ha finalizado. ¡Muchas gracias por participar!
Flow
  Routine introducción_3
  LoopInitiator Prueba loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PreguntaOff': '¿Recuerda el recorrido que realiza desde su cama hasta la cocina de su residencia?', 'PreguntaOn': 1, 'Colors': 'green'},
      {'PreguntaOff': '¿Recuerda el trayecto que hace desde su casa hasta su lugar de trabajo?', 'PreguntaOn': 3, 'Colors': 'red'},
      {'PreguntaOff': '¿Recuerda  algún inconveniente que ha  experimentado en el camino de su residencia a su lugar de trabajo?', 'PreguntaOn': 5, 'Colors': 'white'},
      {'PreguntaOff': '¿Recuerda si hay algún lugar u objeto en su camino hacia el trabajo que le llame la atención?', 'PreguntaOn': 7, 'Colors': 'blue'},
      {'PreguntaOff': ' ¿Recuerda el recorrido desde la entrada de su lugar de trabajo hasta su oficina, donde realiza sus funciones?', 'PreguntaOn': 9, 'Colors': 'yellow'},
      {'PreguntaOff': '¿Recuerda alguna actividad que realice durante los viajes de regreso a casa desde el trabajo para relajarse?', 'PreguntaOn': 11, 'Colors': 'orange'},
      {'PreguntaOff': '¿Recuerda el trayecto que realiza desde su casa hasta el lugar donde realiza sus compras?', 'PreguntaOn': 13, 'Colors': 'brown'},
      {'PreguntaOff': '¿Recuerda alguna situación divertida o interesante que haya experimentado durante el recorrido hacia el lugar de compras?', 'PreguntaOn': 15, 'Colors': 'purple'},
      {'PreguntaOff': ' ¿Recuerda qué es lo primero que ve al llegar al lugar donde realiza sus compras?', 'PreguntaOn': 17, 'Colors': 'green'},
      {'PreguntaOff': '¿Recuerda el recorrido desde su residencia hasta el centro de resonancia magnética?', 'PreguntaOn': 19, 'Colors': 'red'}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
    Routine Off
    LoopInitiator RepeticionOn loopType="TrialHandler"
      conditionsFile = CondicionesExperimento.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine On
    LoopTerminator RepeticionOn
  LoopTerminator Prueba
  Routine FInalizacion
