PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = ArchivoPrueba
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine introducción_3
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    TextComponent introducción
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Intente recordar el recorrido que realiza por las zonas que se le indiquen. Cuando comience el conteo, intente seguir la secuencia del mismo.
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine FInalizacion
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    TextComponent FinPrueba
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text [set every repeat]:
        Te informamos que la adquisición ha finalizado. ¡Muchas gracias por participar!
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Off
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    TextComponent CondicionOff
      color [set every repeat] = $Colors
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text [set every repeat]:
        $PreguntaOff
  Routine On
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    TextComponent CondicionOn
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text [set every repeat]:
        ¿Recuerda el recorrido que realiza desde su cama hasta la cocina de su residencia?
  Routine On1
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        ¿Recuerda el trayecto que hace desde su casa hasta su lugar de trabajo?
  Routine On2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        ¿Recuerda  algún inconveniente que ha  experimentado en el camino de su residencia a su lugar de trabajo?
  Routine On3
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        ¿Recuerda si hay algún lugar u objeto en su camino hacia el trabajo que le llame la atención?
  Routine On4
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
         ¿Recuerda el recorrido desde la entrada de su lugar de trabajo hasta su oficina, donde realiza sus funciones?
  Routine On5
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        ¿Recuerda alguna actividad que realice durante los viajes de regreso a casa desde el trabajo para relajarse?
  Routine On6
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        ¿Recuerda el trayecto que realiza desde su casa hasta el lugar donde realiza sus compras?
  Routine On7
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        ¿Recuerda alguna situación divertida o interesante que haya experimentado durante el recorrido hacia el lugar de compras?
  Routine On8
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
         ¿Recuerda qué es lo primero que ve al llegar al lugar donde realiza sus compras?
  Routine On9
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        ¿Recuerda el recorrido desde su residencia hasta el centro de resonancia magnética?
Flow
  Routine introducción_3
  Routine On
  LoopInitiator RepeticionOn loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PreguntaOn': '¿Recuerda el recorrido que realiza desde su cama hasta la cocina de su residencia?', 'PreguntaOff': 1, 'Colors': 'green'},
      {'PreguntaOn': '¿Recuerda el trayecto que hace desde su casa hasta su lugar de trabajo?', 'PreguntaOff': 3, 'Colors': 'red'},
      {'PreguntaOn': '¿Recuerda  algún inconveniente que ha  experimentado en el camino de su residencia a su lugar de trabajo?', 'PreguntaOff': 5, 'Colors': 'white'},
      {'PreguntaOn': '¿Recuerda si hay algún lugar u objeto en su camino hacia el trabajo que le llame la atención?', 'PreguntaOff': 7, 'Colors': 'blue'},
      {'PreguntaOn': ' ¿Recuerda el recorrido desde la entrada de su lugar de trabajo hasta su oficina, donde realiza sus funciones?', 'PreguntaOff': 9, 'Colors': 'yellow'},
      {'PreguntaOn': '¿Recuerda alguna actividad que realice durante los viajes de regreso a casa desde el trabajo para relajarse?', 'PreguntaOff': 11, 'Colors': 'orange'},
      {'PreguntaOn': '¿Recuerda el trayecto que realiza desde su casa hasta el lugar donde realiza sus compras?', 'PreguntaOff': 13, 'Colors': 'brown'},
      {'PreguntaOn': '¿Recuerda alguna situación divertida o interesante que haya experimentado durante el recorrido hacia el lugar de compras?', 'PreguntaOff': 15, 'Colors': 'purple'},
      {'PreguntaOn': ' ¿Recuerda qué es lo primero que ve al llegar al lugar donde realiza sus compras?', 'PreguntaOff': 17, 'Colors': 'green'},
      {'PreguntaOn': '¿Recuerda el recorrido desde su residencia hasta el centro de resonancia magnética?', 'PreguntaOff': 19, 'Colors': 'red'}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
    Routine Off
  LoopTerminator RepeticionOn
  Routine On1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials
  Routine On2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials_2
  Routine On3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials_3
  Routine On4
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials_4
  Routine On5
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials_5
  Routine On6
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials_6
  Routine On7
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials_7
  Routine On8
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials_8
  Routine On9
  LoopInitiator trials_9 loopType="TrialHandler"
    conditionsFile = CondicionesExperimento.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Off
  LoopTerminator trials_9
  Routine FInalizacion
